<Configuration>

   <Server port="80" />

   <Pipeline name="SeDI_Anonymizer">
        <ImportService
            name="Client Directory Import"
            class="org.rsna.ctp.stdstages.DirectoryImportService"
            root="ctpData/sedi_anonymizer/maastro/roots/directory-import"
            import="import"
            minAge="60000"
            quarantine="ctpData/sedi_anonymizer/maastro/quarantines/directory-import" />
        <DicomAnonymizer
            name="Client DICOM Anonymizer"
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            root="ctpData/sedi_anonymizer/maastro/roots/dicom-anonymizer"
            lookupTable="ctpConfig/sedi_anonymizer/maastro/lookup.properties"
            script="ctpConfig/sedi_anonymizer/maastro/anonymizer.properties"
            quarantine="ctpData/sedi_anonymizer/maastro/quarantines/dicom-anonymizer" />
		<Processor
            name="PatientIdFilter"
            class="org.rsna.ctp.stdstages.DicomFilter"
            root="ctpData/sedi_anonymizer/maastro/roots/dicom-filter"
            script="ctpConfig/sedi_anonymizer/maastro/filter.script"
            quarantine="ctpData/sedi_anonymizer/maastro/quarantines/dicom-filter" />
		<DirectoryStorageService
            name="DirectoryStorageService"
            structure="(0010,0020)/(0008,0060)/(0020,000e)"
            defaultString="UNKNOWN"
            whitespaceReplacement="_"
            class="org.rsna.ctp.stdstages.DirectoryStorageService"
            root="ctpData/sedi_anonymizer/maastro/roots/export" 
            setStandardExtensions="yes" />
   </Pipeline>
   
</Configuration>
